// ********** Image Types

(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")


// ********** Components

(Registration "MultiMetricMultiResolutionRegistration")
(FixedImagePyramid "FixedRecursiveImagePyramid" "FixedRecursiveImagePyramid")
(MovingImagePyramid "MovingRecursiveImagePyramid" "MovingRecursiveImagePyramid")
(Interpolator "BSplineInterpolator" "BSplineInterpolator")
(Metric "AdvancedMeanSquares" "TransformBendingEnergyPenalty")
(Metric0Weight 1.0)
(Metric1Weight 1.0)
(Optimizer "GOMEA") // AdaptiveStochasticGradientDescent
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "RecursiveBSplineTransform")


// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 2)

// ********** Transform

(FinalGridSpacingInVoxels 10 10)
(HowToCombineTransforms "Compose")
(UseDirectionCosines "true")


// ********** Optimizer

(MaximumNumberOfIterations 20)
(PartialEvaluations "true")
(FosElementSize -6)
(BasePopulationSize 50)

// ********** Several

(WriteResultImage "true")
(UseNormalization "true")


// ********** ImageSampler
(ImageSampler "RandomCoordinate" "RandomCoordinate")
(SamplingPercentage 0.2)


// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)
