// ********** Image Types

(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")


// ********** Components

(Registration "MultiResolutionRegistration")
(FixedImagePyramid "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid")
(Interpolator "LinearInterpolator")
(Metric "AdvancedMeanSquares")
(Optimizer "GOMEA")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "BSplineTransform")


// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 1)
//(ImagePyramidSchedule 1 1)

// ********** Optimizer

(MaximumNumberOfIterations 20)
//(PartialEvaluations "true")
//(FosElementSize -6)
(BasePopulationSize 10)

// ********** Transform

(FinalGridSpacingInVoxels 1)
//(GridSpacingSchedule 2.0 1.0)
(HowToCombineTransforms "Compose")

// ********** Several

(WriteResultImage "false")


// ********** ImageSampler

(ImageSampler "Random")
(NumberOfSpatialSamples 100)
(SamplingPercentage 0.01)


// ********** Interpolator and Resampler

(BSplineInterpolationOrder 1)
(FinalBSplineInterpolationOrder 3)
(DefaultPixelValue 0)
